PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Keval/OneDrive/Desktop/study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'police'},
      {'study_word': 'colour'},
      {'study_word': 'guitar'},
      {'study_word': 'pastry'},
      {'study_word': 'tiger'},
      {'study_word': 'lion'},
      {'study_word': 'book'},
      {'study_word': 'chair'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Keval/OneDrive/Desktop/test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'ch_i_'},
      {'test': 'pa_tr_'},
      {'test': 'b_o_'},
      {'test': 'ti_e_'},
      {'test': 'va_e'},
      {'test': 'l_on'},
      {'test': 'co_ou_'},
      {'test': 'p_l_ce'},
      {'test': 'gu_t_r'},
      {'test': 'mo_s_'},
      {'test': 'h_us_'},
      {'test': 'cr_a_'},
      {'test': 'me_l'},
      {'test': 'ri_h_'}]
    Routine test
  LoopTerminator trials_2
